{
    "analysis_tasks": [
         {
            "task": "PlotPerformance",
            "module": "merlin.analysis.plotperformance",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "optimize_task": "Optimize10",
                "decode_task": "Decode",
                "filter_task": "AdaptiveFilterBarcodes"
            }
        },
        {
            "task": "ExportBarcodes",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "WatershedSegmentNucleiCV2",
            "module": "merlin.analysis.segment",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "global_align_task": "SimpleGlobalAlignment",
                "membrane_channel_name": "ConA",
                "nuclei_channel_name": "DAPI"
            }
        },
        {
            "task": "CleanCellBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "WatershedSegmentNucleiCV2",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CombineCleanedBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "cleaning_task": "CleanCellBoundaries"
            }
        },
        {
            "task": "RefineCellDatabases",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "WatershedSegmentNucleiCV2",
                "combine_cleaning_task": "CombineCleanedBoundaries"
            }
        },
        {
            "task": "ExportCellMetadata",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "RefineCellDatabases"
            }
        },
        {
            "task": "PartitionBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes"
            }
        },
        {
            "task": "SlurmReport",
            "module": "merlin.analysis.slurmreport",
            "analysis_name": "SlurmReport",
            "parameters": {
                "run_after_task": "ExportPartitionedBarcodes"
            }
        }
    ]
}
