{
    "analysis_tasks": [
        {
            "task": "SimpleGlobalAlignment",
            "module": "merlin.analysis.globalalign"
        },
        {
            "task": "FiducialCorrelationWarp",
            "module": "merlin.analysis.warp",
            "parameters": {
                "write_fiducial_images": true,
                "highpass_sigma": 10
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": ["bit01","bit02","bit03","bit04",
                                  "bit05","bit06","bit07","bit08",
                                  "bit09","bit10","bit11","bit12",
                                  "bit13","bit14","bit15","bit16", 
                                  "bit17","bit18","bit19","bit20",
                                  "bit21","bit22","bit23","bit24",
                                  "bit25","bit26","DAPI","polyT"],
                "separate_files": true,
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit01",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit01",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit02",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit02",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit03",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit03",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit04",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit04",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit05",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit05",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit06",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit06",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit07",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit07",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit08",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit08",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit09",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit09",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit10",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit10",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit11",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit11",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit12",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit12",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit13",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit13",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit14",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit14",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit15",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit15",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_bit16",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "bit16",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_DAPI",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "DAPI",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "analysis_name": "mosaic_polyT",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
                "data_channels": "polyT",
                "microns_per_pixel": 10,
                "z_index": 3
            }
        }
    ]
}
