{
    "analysis_tasks": [
        {
            "task": "SimpleGlobalAlignment",
            "module": "merlin.analysis.globalalign"
        },
        {
            "task": "FiducialCorrelationWarp",
            "module": "merlin.analysis.warp",
            "parameters": {
                "write_fiducial_images": true,
                "highpass_sigma": 10
            }
        },
        {
            "task": "DeconvolutionPreprocess",
            "module": "merlin.analysis.preprocess",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "highpass_sigma": 3,
                "decon_sigma": 2,
                "decon_iterations": 20,
                "decon_filter_size": 9 
            }
        },
               {
            "task": "MachineLearningSegment",
            "module": "merlin.analysis.segment",
            "analysis_name": "CellposeSegmentation",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "global_align_task": "SimpleGlobalAlignment",
                "method": "cellpose",
                "diameter": 50,
                "compartment_channel_name": "DAPI", 
                "flow_threshold": 0.5, 
                "cellprob_threshold": 1
            }
        },
        {
            "task": "CleanCellBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellposeSegmentation",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CombineCleanedBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "cleaning_task": "CleanCellBoundaries"
            }
        },
        {
            "task": "RefineCellDatabases",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellposeSegmentation",
                "combine_cleaning_task": "CombineCleanedBoundaries"
            }
        },
        {
            "task": "ExportCellMetadata",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "RefineCellDatabases"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize1",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize2",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize1",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize3",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize2",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize4",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize3",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize5",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize4",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize6",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize5",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize7",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize6",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize8",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize7",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize9",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize8",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize10",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize9",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "Decode",
            "module": "merlin.analysis.decode",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "optimize_task": "Optimize10",
                "global_align_task": "SimpleGlobalAlignment",
                "minimum_area": 1,
                "lowpass_sigma": 1,
                "crop_width": 102,
                "distance_threshold":0.65
            }
        },
        {
            "task": "GenerateAdaptiveThreshold",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "decode_task": "Decode",
                "run_after_task": "Decode"
            }
        }, 
        {
            "task": "AdaptiveFilterBarcodes01",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.1,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes01",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes01",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes01",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes01",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes01",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes01"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes005",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.05,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes005",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes005",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes005",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes005",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes005",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes005"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes004",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.04,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes004",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes004",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes004",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes004",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes004",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes004"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes003",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.03,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes003",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes003",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes003",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes003",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes003",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes003"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes002",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.02,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes002",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes002",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes002",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes002",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes002",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes002"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes001",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.01,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes001",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes001",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes001",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes001",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes001",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes001"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes0005",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.005,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes0005",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes0005",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "PartitionBarcodes0005",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes0005",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes0005",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes0005"
            }
        },
        {
            "task": "SlurmReport",
            "module": "merlin.analysis.slurmreport",
            "analysis_name": "SlurmReport",
            "parameters": {
                "run_after_task": "ExportPartitionedBarcodes0005"
            }
        }
    ]
}
