{
    "analysis_tasks": [
        {
            "task": "SimpleGlobalAlignment",
            "module": "merlin.analysis.globalalign"
        },
        {
            "task": "FiducialCorrelationWarp",
            "module": "merlin.analysis.warp",
            "parameters": {
                "write_fiducial_images": true,
                "highpass_sigma": 10
            }
        },
        {
            "task": "DeconvolutionPreprocess",
            "module": "merlin.analysis.preprocess",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "highpass_sigma": 3,
                "decon_sigma": 2,
                "decon_iterations": 20,
                "decon_filter_size": 9 
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize1",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[166,4],[178,2],[175,4],[109,4],[245,1]],
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize2",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[327,6],[42,5],[248,3],[166,6],[245,6]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize1"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize3",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[181,3],[313,0],[99,4],[323,3],[235,1]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize2"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize4",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[163,6],[179,2],[315,1],[44,4],[1251,0]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize3"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize5",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[324,6],[322,5],[242,0],[102,4],[40,6]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize4"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize6",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[103,0],[44,4],[234,1],[51,1],[51,4]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize5"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize7",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[326,0],[93,3],[313,4],[49,4],[1250,2]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize6"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize8",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[246,1],[171,1],[43,4],[103,0],[323,1]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize7"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize9",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[173,1],[328,6],[251,6],[250,6],[175,6]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize8"
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize10",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 4,
                "fov_index":[[1251,4],[168,4],[315,4],[172,1],[109,2]],
                "optimize_chromatic_correction": true,
                "previous_iteration": "Optimize9"
            }
        },
        {
            "task": "Decode",
            "module": "merlin.analysis.decode",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocess",
                "optimize_task": "Optimize10",
                "global_align_task": "SimpleGlobalAlignment",
                "minimum_area": 1,
                "lowpass_sigma": 1,
                "crop_width": 102,
                "distance_threshold":0.65
            }
        },
        {
            "task": "GenerateAdaptiveThreshold",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "decode_task": "Decode",
                "run_after_task": "Decode"
            }
        }, 
        {
            "task": "AdaptiveFilterBarcodes",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "misidentification_rate": 0.05,
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        }, 
        {
            "task": "ExportBarcodes",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov", "cell_index"],
                "exclude_blanks": false
            }
        },
        {
            "task": "MachineLearningSegment",
            "module": "merlin.analysis.segment",
            "analysis_name": "CellposeSegmentation",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "global_align_task": "SimpleGlobalAlignment",
                "method": "cellpose",
                "diameter": 75,
                "compartment_channel_name": "DAPI", 
                "flow_threshold": 1, 
                "cellprob_threshold": 0.5
            }
        },
        {
            "task": "CleanCellBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellposeSegmentation",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CombineCleanedBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "cleaning_task": "CleanCellBoundaries"
            }
        },
        {
            "task": "RefineCellDatabases",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "CellposeSegmentation",
                "combine_cleaning_task": "CombineCleanedBoundaries"
            }
        },
        {
            "task": "ExportCellMetadata",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "RefineCellDatabases"
            }
        },
        {
            "task": "PartitionBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes"
            }
        },
        {
            "task": "SlurmReport",
            "module": "merlin.analysis.slurmreport",
            "analysis_name": "SlurmReport",
            "parameters": {
                "run_after_task": "ExportPartitionedBarcodes"
            }
        }
    ]
}
